<PlusConfiguration version="2.0">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="PlusServer: Media Foundation video capture device - color"
      Description="Broadcasting acquired video through OpenIGTLink" />
    
	<Device
      Id="TrackerDevice"
      Type="PolarisTracker"
      SerialPort="4"
      BaudRate="115200"
	  AcquisitionRate="60"
      ToolReferenceFrame="Tracker" >
      <DataSources>
	  
		<DataSource Type="Tool" Id="Camera" RomFile="ToolDefinitions/Camera.rom"  />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream" >
			
		  <DataSource Id="Camera"/>
        </OutputChannel>
      </OutputChannels>
    </Device>
	
	<Device
      Id="VideoDevice" 
      Type="MmfVideo" 
      FrameSize="640 480"
      VideoFormat="YUY2"
      CaptureDeviceId="0" >
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF" ImageType="RGB_COLOR"  />
      </DataSources>      
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
    <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="RecordingTest.mha"
      EnableCapturingOnStart="FALSE" >
      <InputChannels>
        <InputChannel Id="VideoStream" />
      </InputChannels>
    </Device>
	
	<Device 
      Id="TrackedVideoDevice" 
      Type="VirtualMixer" >
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="VideoStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream"/>
      </OutputChannels>
    </Device>
	
  </DataCollection>

  <CoordinateDefinitions>
     
	  
    
	  
	<Transform From="Camera" To="ImagePlane"
		Matrix="
		-0.99981   -0.0148    -0.01251   -39.8957
		0.001761   0.573427   -0.81925   -19.3914
		0.019293   -0.81912   -0.57329   9.935949
		0 0 0 1"
      Error="0.02" Date="12102016_2318" />
	
	<Transform From="Laser" To="PlaneOrigin"
		Matrix="
		1.0000		0 		0 		33.3550 
		0          1.0000  0 		73.8980 
		0          0 	 	1.0000	-43.4400 
		0          0 	 	0.0000 	 1.0000"
		Error="1.83" Date="20170630T2050" />
		
		
		<Transform From="Laser" To="PlaneNormal"
		Matrix="
		1.0000		0 		0 		-0.9800
		0          1.0000  0 		-0.1985
		0          0 	 	1.0000	-0.0155 
		0          0 	 	0.0000 	 0"
		Error="1.83" Date="20170630T2050" />
	
  </CoordinateDefinitions>
  
  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18944" 
    SendValidTransformsOnly="true" 
    OutputChannelId="VideoStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Reference" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

</PlusConfiguration>
